PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1664, 1109]
  expName = image_slider
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent stim
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 1
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    SliderComponent slider
      font = MS PGothic
      forceEndRoutine = False
      granularity = 0
      labels = ("非常にxxでない","非常にxxである")
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    MouseComponent mouse
      clickable = next_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider.rating
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    ImageComponent next_button
      image = next_button.png
      pos = (0.4, -0.45)
      size = (0.2, 0.2)
      startVal [condition] = slider.rating
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_file_list.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'image_file': 'pen.png'},
      {'image_file': 'battery.png'},
      {'image_file': 'clip.png'}]
    Routine trial
  LoopTerminator trials
