PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = metal_rotation
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent stimulus
      letterHeight = 0.1
      ori [set every repeat] = rotAngle
      startVal [time (s)] = 1
      text [set every repeat] = $letter
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine feedback
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if key_resp.corr == 1:
            fbMes = '正解です'
        else:
            fbMes = '間違いです'
    TextComponent fbMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fbMes
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mental_rotation_condition.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'letter': 'b', 'rotAngle': 0, 'corrAns': 'right'},
      {'letter': 'b', 'rotAngle': 60, 'corrAns': 'right'},
      {'letter': 'b', 'rotAngle': 120, 'corrAns': 'right'},
      {'letter': 'b', 'rotAngle': 180, 'corrAns': 'right'},
      {'letter': 'b', 'rotAngle': 240, 'corrAns': 'right'},
      {'letter': 'b', 'rotAngle': 300, 'corrAns': 'right'},
      {'letter': 'd', 'rotAngle': 0, 'corrAns': 'left'},
      {'letter': 'd', 'rotAngle': 60, 'corrAns': 'left'},
      {'letter': 'd', 'rotAngle': 120, 'corrAns': 'left'},
      {'letter': 'd', 'rotAngle': 180, 'corrAns': 'left'},
      {'letter': 'd', 'rotAngle': 240, 'corrAns': 'left'},
      {'letter': 'd', 'rotAngle': 300, 'corrAns': 'left'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
