PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.0000, 0.0000, 0.0000
  expName = test1
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (0.9, 0.9)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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Flow
  Routine trial
