PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'gender': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.0000, 0.0000, 0.0000
  expName = test3
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 1
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    SliderComponent slider
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0902, -1.0000, -1.0000
      font = Meiryo
      forceEndRoutine = True
      granularity = 1
      labels = "美しくない","やや美しくない","どちらともいえない","やや美しい","美しい"
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (0.8,0.02)
      startVal [time (s)] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_file_list.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'image_file': 'pen.png'},
      {'image_file': 'battery.png'},
      {'image_file': 'clip.png'}]
    Routine trial
  LoopTerminator trials
